<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino Mega 2560</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>3840</gl:Width>
          <gl:Height>1280</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>White</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location>
            <gl:X>3840</gl:X>
            <gl:Y>0</gl:Y>
          </gl:Location>
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>30</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>PID</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>data\pid-map\pid_signal.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\pid-map\zero_ts.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>3</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pylon:PylonCapture">
          <pylon:SerialNumber>24714376</pylon:SerialNumber>
          <pylon:ParameterFile>acA2040-90umNIR_24714376.pfs</pylon:ParameterFile>
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>72</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>12</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgra</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr
import math
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *

centroid_radius = 25
centroid_color = Scalar.Rgb(255, 0, 0)

@returns(IplImage)
def process(value):
    centroid_x = value.Item1
    centroid_y = value.Item2
    img = value.Item3
    if math.isnan(centroid_x) or math.isnan(centroid_y):
        centroid_x, centroid_y = 0, 0
      

    CV.Circle(img, Point(int(centroid_x), int(centroid_y)), centroid_radius, centroid_color, 1)

    return img
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\clickbait-place\data\pid-map\pid_video.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\pid-map\pid_video_ts.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:Pin>9</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>1000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Button Press</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Button Press</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\pid-map\button_press.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>48</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>48</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>49</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>49</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>255</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>3</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>3</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\pid-map\sequence_end.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\pid-map\left_odor_on.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\pid-map\right_odor_on.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="22" Label="Source1" />
      <Edge From="13" To="25" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="23" Label="Source2" />
      <Edge From="22" To="23" Label="Source3" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="38" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="38" To="66" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="39" To="60" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="45" To="63" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>