<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino Mega 2560</ard:Name>
          <ard:PortName>COM4</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>10</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Thermistor</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>sniff_daq/ai1</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Signal</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DAQData</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a_daq.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoTimestamp</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a_video_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionStart</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Session Timer</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("System.Windows.Forms")
from System.Windows.Forms import SendKeys
from System.Diagnostics import Process
from System import TimeSpan, DateTime
import time

import ctypes
user32 = ctypes.WinDLL('user32', use_last_error=True)



def focus_window(window_title):
    # Find all windows with matching title
    processes = Process.GetProcesses()
    for process in processes:
        if process.MainWindowTitle.lower().find(window_title.lower()) != -1:
            # Bring window to front and focus it
            hwnd = process.MainWindowHandle.ToInt32()
            if hwnd:
                user32.SetForegroundWindow(hwnd)
                return True
    return False

@returns(str)
def process(value):
    now = value[1]
    start_time = value[0][0]
    duration = TimeSpan.FromMinutes(value[0][1]) + TimeSpan.FromMinutes(.5)  # Add 10 seconds to pad startup time

    format_string = "{minutes:02d}:{seconds:02d}"

    elapsed = now - start_time
    remaining = duration - elapsed
    
    minutes = int(remaining.TotalMinutes)
    seconds = int(remaining.Seconds)
    countdown = str("Time remaining: " + format_string.format(minutes=minutes, seconds=seconds))

    if minutes &lt;= 0 and seconds &lt;= 0:
        focus_window("clickbait_place_master")
        countdown = "Time's up!"
        SendKeys.SendWait("+{F5}")

    return countdown
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>27</cv:Size1>
          <cv:Size2>27</cv:Size2>
          <cv:Sigma1>20</cv:Sigma1>
          <cv:Sigma2>20</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>64</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>12</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:PortName>Arduino Mega 2560</ard:PortName>
            <ard:Pin>7</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="LessThan">
          <Operand xsi:type="IntProperty">
            <Value>40</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Left</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Right</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Signal</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Input ConversionTest</ipy:Name>
        <ipy:Script>@returns(float)
def process(value):
    try:
        return float(value.GetReal(0,0))
    except:
        return float('nan')</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>3</dsp:Count>
          <dsp:Skip>1</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Peak detection</ipy:Name>
        <ipy:Script>import math

FS = 100.0
DT = 1.0 / FS

baseline = 0.0
baseline_initialized = False
alpha_baseline = 0.001

smooth = 0.0
smooth_initialized = False
alpha_smooth = 0.25

noise_ema = 1.0
noise_initialized = False
alpha_noise = 0.01

last_y1 = 0.0
last_y2 = 0.0

time_elapsed = 0.0
last_event_time = -1e9
REFRACTORY_SEC = 0.025

DEBUG_MODE = 0
# 0 = pulse output
# 1 = centered raw
# 2 = smoothed signal
# 3 = threshold

def _to_float(x):
    try:
        return float(x.Val0)
    except:
        try:
            return float(x[0])
        except:
            try:
                return float(str(x))
            except:
                return float('nan')

@returns(bool)
def process(value):
    global baseline, baseline_initialized
    global smooth, smooth_initialized
    global noise_ema, noise_initialized
    global last_y1, last_y2
    global time_elapsed, last_event_time

    try:
        s0 = _to_float(value[0])
        s1 = _to_float(value[1])
        s2 = _to_float(value[2])
    except:
        return 0.0

    if math.isnan(s0) or math.isnan(s1) or math.isnan(s2):
        return 0.0

    time_elapsed += DT

    if not baseline_initialized:
        baseline = s1
        baseline_initialized = True

    baseline = (1.0 - alpha_baseline) * baseline + alpha_baseline * s1

    x0 = s0 - baseline
    x1 = s1 - baseline
    x2 = s2 - baseline

    # light smoothing on current sample
    x = x1
    if not smooth_initialized:
        smooth = x
        smooth_initialized = True
    else:
        smooth = (1.0 - alpha_smooth) * smooth + alpha_smooth * x

    # update noise from sample-to-sample change
    dx = x2 - x1
    adx = abs(dx)
    if not noise_initialized:
        noise_ema = adx + 1.0
        noise_initialized = True
    else:
        noise_ema = (1.0 - alpha_noise) * noise_ema + alpha_noise * adx

    # 3-point smoothed local minimum test
    y0 = last_y2
    y1 = last_y1
    y2 = smooth
    last_y2 = last_y1
    last_y1 = smooth

    if time_elapsed &lt; 0.01:
        if DEBUG_MODE == 1:
            return x1
        elif DEBUG_MODE == 2:
            return smooth
        elif DEBUG_MODE == 3:
            return -2.0 * noise_ema
        return 0.0

    is_local_min = (y1 &lt; y0) and (y1 &lt;= y2)
    threshold = -2.0 * noise_ema
    enough_time = (time_elapsed - last_event_time) &gt;= REFRACTORY_SEC

    event = 0.0
    if enough_time and is_local_min and (y1 &lt; threshold):
        event = 1.0
        last_event_time = time_elapsed

    if DEBUG_MODE == 1:
        return x1
    elif DEBUG_MODE == 2:
        return smooth
    elif DEBUG_MODE == 3:
        return threshold
    else:
        return bool(event)</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>2-target IBI</ipy:Name>
        <ipy:Script>import math

FS = 1000.0
DT = 1.0 / FS

time_elapsed = 0.0
last_event_time = float('nan')

DEBUG_MODE = 0
# 0 = class output
# 1 = ibi seconds
# 2 = freq hz

def _to_float(x):
    try:
        return float(x)
    except:
        try:
            return float(x.Val0)
        except:
            try:
                return float(x[0])
            except:
                try:
                    return float(str(x))
                except:
                    return float('nan')

@returns(bool)
def process(value):
    global time_elapsed, last_event_time

    v = _to_float(value)
    if math.isnan(v):
        return 0.0

    time_elapsed += DT

    event = (v &gt; 0.5)
    if not event:
        return 0.0

    if math.isnan(last_event_time):
        last_event_time = time_elapsed
        return 0.0

    ibi = time_elapsed - last_event_time
    last_event_time = time_elapsed

    if ibi &lt;= 0.0:
        return 0.0

    freq = 1.0 / ibi

    if DEBUG_MODE == 1:
        return ibi
    elif DEBUG_MODE == 2:
        return freq

    if freq &gt;= 4.8 and freq &lt; 5.2:
        return True
  
    else:
        return False</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>3-eventTrigger-1</ipy:Name>
        <ipy:Script>FS = 100.0
DT = 1.0 / FS
PULSE_SEC = 0.200

TARGET_CLASS = 1.0
# 1.0 = below 4 Hz
# 2.0 = 4 to 8 Hz
# 3.0 = 8 Hz and above

remaining = 0.0

@returns(bool)
def process(x):
    global remaining

    try:
        target_event = float(x)
    except:
        try:
            target_event = float(x[0])
        except:
            target_event = 0.0

    trigger = (target_event == TARGET_CLASS)

    if trigger:
        remaining = PULSE_SEC

    if remaining &gt; 0.0:
        remaining -= DT
        return True
    else:
        return False</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Clickbait Task</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *
import math
import time
import random
import System
from System import Array

# Function to extract dims from image
def get_image_shape(img):
    size = img.Size
    return [size.Width, size.Height]

def create_blank_canvas(width, height, channels=3, color=(0, 0, 0)):
    depth = IplDepth.U8
    img = IplImage(Size(width, height), depth, channels)
    if channels == 1:
        fill_color = Scalar.All(color[0])
    else:
        fill_color = Scalar.Rgb(color[0], color[1], color[2])
    img.Set(fill_color)

    return img

"""
Global variables
"""
# Initialize reward variables
global trial_count
global reward_left_count
global reward_right_count
global reward_state
global click
global click_start_time
global drinking
global reward_left
global reward_right
global reward_left_start_time
global reward_right_start_time
global trial_armed

trial_count = 0
reward_left_count = 0
reward_right_count = 0
reward_state = True
click = False
click_start_time = 0
drinking = False
reward_left = False
reward_right = False
reward_left_start_time = 0
reward_right_start_time = 0
trial_armed = True  # Correct-trial trigger available (replaces active_target's per-trial gate)

# ITI Variables
global iti_start_time
global iti_duration
global in_iti
global withdrawal_start_time
global in_withdrawal_period
global prev_poke_left
global prev_poke_right
global prev_correct_trigger

iti_start_time = 0
iti_duration = 0
in_iti = False
withdrawal_start_time = 0
in_withdrawal_period = False
prev_poke_left = False
prev_poke_right = False
prev_correct_trigger = False  # For rising-edge detection on the incoming boolean

"""
# Visualization parameters
"""
centroid_color = Scalar.Rgb(255, 255, 255)
centroid_radius = 5

"""
Execute task
"""

@returns(tuple)
def process(value):
    # Declare global vars
    global trial_count
    global reward_left_count
    global reward_right_count
    global reward_state
    global click
    global click_start_time
    global drinking
    global reward_left
    global reward_right
    global reward_left_start_time
    global reward_right_start_time
    global trial_armed
    global iti_start_time
    global iti_duration
    global in_iti
    global withdrawal_start_time
    global in_withdrawal_period
    global prev_poke_left
    global prev_poke_right
    global prev_correct_trigger

    # Timing-related vars
    current_time = time.time()
    reward_duration_left = 0.032
    reward_duration_right = 0.032
    click_duration = 0.1
    iti_duration_min = 1.0
    iti_duration_max = 5.0
    withdrawal_duration = 0.5

    # Load realtime variables from Zip node
    centroid_x, centroid_y, image = value[0].Item1, value[0].Item2, value[0].Item3
    poke_left, poke_right = value[1][0], value[1][1]
    correct_trigger = bool(value[1][2])

    # Catch NaN centroid immediately and convert to (0, 0)
    if math.isnan(centroid_x) or math.isnan(centroid_y):
        centroid_x, centroid_y = 0.0, 0.0

    # Convert correct_trigger None to False
    if correct_trigger is None:
        correct_trigger = False

    # Process canvas
    img_dims = get_image_shape(image)
    canvas = create_blank_canvas(img_dims[0], img_dims[1])

    # Draw centroid (visualization is centroid-only)
    CV.Circle(canvas, Point(int(centroid_x), int(centroid_y)), centroid_radius, centroid_color, -1)

    # Rising-edge detection: fire only on a fresh False-&gt;True transition, so a
    # boolean held high across drinking/ITI cannot immediately re-trigger reward
    # the moment the trial re-arms at ITI end.
    correct_rising_edge = correct_trigger and not prev_correct_trigger

    # Correct-trial trigger: single bool replaces spatial target detection
    if correct_rising_edge and trial_armed and not reward_state:
        # Consume the trial (re-armed at ITI end)
        trial_armed = False

        # Trigger reward state
        reward_state = True
        click = True
        click_start_time = current_time

    # State machine logic
    if in_iti:
        if current_time - iti_start_time &gt;= iti_duration:
            trial_count += 1
            in_iti = False

            # Re-arm the trigger for the next trial (only if consumed)
            if not trial_armed:
                trial_armed = True

    elif in_withdrawal_period:
        if not (poke_left or poke_right):  # Mouse has withdrawn
            if current_time - withdrawal_start_time &gt;= withdrawal_duration:
                in_withdrawal_period = False
                in_iti = True
                iti_start_time = current_time
                iti_duration = random.uniform(iti_duration_min, iti_duration_max)
        else:  # Mouse is still poking, reset withdrawal timer
            withdrawal_start_time = current_time

    elif reward_state:
        if reward_left and current_time - reward_left_start_time &gt;= reward_duration_left:
            reward_left = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif reward_right and current_time - reward_right_start_time &gt;= reward_duration_right:
            reward_right = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif poke_left and not reward_left and not reward_right:
            reward_left = True
            reward_left_count += 1
            reward_left_start_time = current_time
        elif poke_right and not reward_right and not reward_left:
            reward_right = True
            reward_right_count += 1
            reward_right_start_time = current_time

    # Handle click duration
    if click and current_time - click_start_time &gt;= click_duration:
        click = False

    # Update previous poke states and set drinking state
    prev_poke_left, prev_poke_right = poke_left, poke_right
    prev_correct_trigger = correct_trigger
    drinking = poke_left or poke_right

    # Return values
    return (canvas, Point(centroid_x, centroid_y), reward_state, reward_left, reward_right,
            poke_left, poke_right, drinking, in_iti, click,
            trial_count, reward_left_count, reward_right_count)</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Trial Count</ipy:Name>
        <ipy:Script># Get trial count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Left</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[5]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Right</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[6]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Mouse Centroid</ipy:Name>
        <ipy:Script>clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(Point)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEventsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a_eventsA.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PeakDetectionFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a_peakdetection.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BufferFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a_buffer.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ITI</ipy:Name>
        <ipy:Script># ITI status

@returns(bool)
def process(value):
  return value[8]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward State</ipy:Name>
        <ipy:Script># Get reward state

@returns(bool)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Left</ipy:Name>
        <ipy:Script># Get reward_left state

@returns(bool)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Right</ipy:Name>
        <ipy:Script># Get reward_right state and reward state

@returns(bool)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>9</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Click</ipy:Name>
        <ipy:Script># Get click state (click is always last item in return statement)

@returns(bool)
def process(value):
  return value[9]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Right Count</ipy:Name>
        <ipy:Script># Get reward right count

@returns(int)
def process(value):
  return value[-2]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Left Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Combine Trial Counts</ipy:Name>
        <ipy:Description />
        <ipy:Script>@returns(str)
def process(value):
  reward_r = str(value.Item1)
  reward_l = str(value.Item2)
  total = str(value.Item1 + value.Item2)
  trial_info = "Left: " + reward_l + " Right: " + reward_r + " Total: " + total
  return trial_info</ipy:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCountsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a_trialcounts.txt</io:Path>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialRewardsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\cb-breathe-test\therm\0021\t1a\073126_0021_t1a_eventsB.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filename Definitions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Name>Get Start Timestamp</ipy:Name>
              <ipy:Script>from System import DateTime

# Get timestamp from beginning of session

@returns(DateTime)
def generate():
  yield DateTime.Now
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionStart</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Date</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>File naming info</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File naming info</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_video_timestamp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoTimestamp</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_amplifierdata</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AmplifierDataFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_daq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DAQData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_occupancy</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>JPG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>HistogramFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialEventsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_trialcounts</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TXT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialCountsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_buffer</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>BufferFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_peakdetection</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>PeakDetectionFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialRewardsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.jpg</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>JPG</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>CSV</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AVI</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.txt</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TXT</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>BIN</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source4" />
            <Edge From="6" To="7" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="34" Label="Source2" />
            <Edge From="33" To="34" Label="Source3" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="42" Label="Source1" />
            <Edge From="40" To="42" Label="Source2" />
            <Edge From="41" To="42" Label="Source3" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="55" To="58" Label="Source1" />
            <Edge From="56" To="58" Label="Source2" />
            <Edge From="57" To="58" Label="Source3" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="63" To="66" Label="Source1" />
            <Edge From="64" To="66" Label="Source2" />
            <Edge From="65" To="66" Label="Source3" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="74" Label="Source1" />
            <Edge From="72" To="74" Label="Source2" />
            <Edge From="73" To="74" Label="Source3" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="79" To="82" Label="Source1" />
            <Edge From="80" To="82" Label="Source2" />
            <Edge From="81" To="82" Label="Source3" />
            <Edge From="82" To="83" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="84" To="85" Label="Source1" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="87" To="90" Label="Source1" />
            <Edge From="88" To="90" Label="Source2" />
            <Edge From="89" To="90" Label="Source3" />
            <Edge From="90" To="91" Label="Source1" />
            <Edge From="91" To="92" Label="Source1" />
            <Edge From="92" To="93" Label="Source1" />
            <Edge From="93" To="94" Label="Source1" />
            <Edge From="95" To="96" Label="Source1" />
            <Edge From="97" To="98" Label="Source1" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="101" To="102" Label="Source1" />
            <Edge From="103" To="104" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Date" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>073126</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Date</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Duration (Minutes)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>SessionDuration</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="MouseID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0021</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>MouseID</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Num." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>t1a</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Session Number</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Implant Type" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>therm</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ExpName</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Data Directory" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>D:/cb-breathe-test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExpName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseID</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Session Number</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Path</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="23" Label="Source1" />
      <Edge From="9" To="32" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="14" To="21" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="31" Label="Source1" />
      <Edge From="30" To="33" Label="Source1" />
      <Edge From="31" To="33" Label="Source2" />
      <Edge From="32" To="33" Label="Source3" />
      <Edge From="33" To="48" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="47" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="47" Label="Source2" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="43" To="65" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="44" To="62" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source3" />
      <Edge From="47" To="48" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="49" To="51" Label="Source1" />
      <Edge From="49" To="53" Label="Source1" />
      <Edge From="49" To="54" Label="Source1" />
      <Edge From="49" To="55" Label="Source1" />
      <Edge From="49" To="56" Label="Source6" />
      <Edge From="49" To="66" Label="Source1" />
      <Edge From="49" To="68" Label="Source1" />
      <Edge From="49" To="71" Label="Source1" />
      <Edge From="49" To="73" Label="Source1" />
      <Edge From="49" To="75" Label="Source1" />
      <Edge From="49" To="77" Label="Source1" />
      <Edge From="49" To="78" Label="Source1" />
      <Edge From="50" To="56" Label="Source1" />
      <Edge From="50" To="79" Label="Source3" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="56" Label="Source2" />
      <Edge From="53" To="56" Label="Source3" />
      <Edge From="54" To="56" Label="Source4" />
      <Edge From="55" To="56" Label="Source5" />
      <Edge From="56" To="59" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source2" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="66" To="84" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="68" To="70" Label="Source1" />
      <Edge From="68" To="84" Label="Source2" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="71" To="84" Label="Source3" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="73" To="84" Label="Source4" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="75" To="84" Label="Source5" />
      <Edge From="77" To="79" Label="Source1" />
      <Edge From="78" To="79" Label="Source2" />
      <Edge From="79" To="80" Label="Source1" />
      <Edge From="80" To="83" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source2" />
      <Edge From="84" To="87" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="86" To="87" Label="Source2" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="99" To="100" Label="Source1" />
      <Edge From="101" To="102" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="113" Label="Source1" />
      <Edge From="106" To="113" Label="Source2" />
      <Edge From="107" To="113" Label="Source3" />
      <Edge From="108" To="113" Label="Source4" />
      <Edge From="109" To="113" Label="Source5" />
      <Edge From="110" To="113" Label="Source6" />
      <Edge From="111" To="113" Label="Source7" />
      <Edge From="112" To="113" Label="Source8" />
      <Edge From="113" To="114" Label="Source1" />
      <Edge From="114" To="115" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>