<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino Mega 2560</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pylon:PylonCapture">
          <pylon:SerialNumber>24714376</pylon:SerialNumber>
          <pylon:ParameterFile>acA2040-90umNIR_24714376.pfs</pylon:ParameterFile>
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\clickbait-place\data\tetrode_ob-hc\testttt\a5\05142025_testttt_a5.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoTimestamp</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\tetrode_ob-hc\testttt\a5\05142025_testttt_a5_video_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionStart</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Session Timer</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("System.Windows.Forms")
from System.Windows.Forms import SendKeys
from System.Diagnostics import Process
from System import TimeSpan, DateTime
import time

import ctypes
user32 = ctypes.WinDLL('user32', use_last_error=True)



def focus_window(window_title):
    # Find all windows with matching title
    processes = Process.GetProcesses()
    for process in processes:
        if process.MainWindowTitle.lower().find(window_title.lower()) != -1:
            # Bring window to front and focus it
            hwnd = process.MainWindowHandle.ToInt32()
            if hwnd:
                user32.SetForegroundWindow(hwnd)
                return True
    return False

@returns(str)
def process(value):
    now = value[1]
    start_time = value[0][0]
    duration = TimeSpan.FromMinutes(value[0][1]) + TimeSpan.FromMinutes(.5)  # Add 10 seconds to pad startup time

    format_string = "{minutes:02d}:{seconds:02d}"

    elapsed = now - start_time
    remaining = duration - elapsed
    
    minutes = int(remaining.TotalMinutes)
    seconds = int(remaining.Seconds)
    countdown = str("Time remaining: " + format_string.format(minutes=minutes, seconds=seconds))

    if minutes &lt;= 0 and seconds &lt;= 0:
        focus_window("clickbait_anemo")
        countdown = "Time's up!"
        SendKeys.SendWait("+{F5}")

    return countdown
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>27</cv:Size1>
          <cv:Size2>27</cv:Size2>
          <cv:Sigma1>20</cv:Sigma1>
          <cv:Sigma2>20</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>60</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>12</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>40</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Left</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Right</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Clickbait Task</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *
import math
import time
import random
import System
from System import Array

# Class to generate maze coordinates
class GridMaze:
    def __init__(self, maze_bounds, maze_dims):
        self.bounds = maze_bounds
        self.shape = maze_dims
        
        cellsize_x = maze_bounds[0] // maze_dims[0]
        cellsize_y = maze_bounds[1] // maze_dims[1]
        
        # Generate Grid
        self.cells = [
            (Point(x * cellsize_x, y * cellsize_y), 
             Point((x + 1) * cellsize_x, (y + 1) * cellsize_y))
            for y in range(1,self.shape[1]-1)
            for x in range(1,self.shape[0]-1)
        ]

def draw_grid(grid, img):
    for cell in grid.cells:
        CV.Rectangle(img, cell[0], cell[1], grid_color, thickness=2)

# Function to extract dims from image
def get_image_shape(img):
    size = img.Size
    return [size.Width, size.Height]

# Modified function to visualize the target distribution without using Rgba
def draw_target_distribution(target_distribution, grid, img, max_intensity=255):
    # First find the maximum probability in the distribution (for normalization)
    if sum(target_distribution) &gt; 0:
        max_prob = max(target_distribution)
    else:
        max_prob = 1.0  # Default if distribution is empty
    
    # Create a temporary overlay image
    overlay = create_blank_canvas(img.Size.Width, img.Size.Height)
    
    # Create a color for each cell based on its probability
    for i, prob in enumerate(target_distribution):
        if prob &gt; 0 and i &lt; len(grid.cells):
            # Calculate normalized probability (0-1)
            norm_prob = prob / max_prob
            
            # Calculate intensity based on probability (brighter = higher probability)
            intensity = int(norm_prob * max_intensity)
            
            # Use a red color with intensity proportional to probability
            dist_color = Scalar.Rgb(intensity, 0, 0)
            
            # Draw rectangle with color intensity showing probability
            cell = grid.cells[i]
            CV.Rectangle(overlay, cell[0], cell[1], dist_color, thickness=-1)
    
    # Blend the overlay with the original image
    # We'll use a simple blend - add the images and clip values
    alpha = 0.5  # Blend factor (adjust for transparency effect)
    CV.AddWeighted(img, 1.0, overlay, alpha, 0.0, img)
    
    return img

# Global variable to store initial target counts per cell
global initial_cell_counts
global max_initial_count
initial_cell_counts = {}
max_initial_count = 1  # Default to 1 to avoid division by zero

def draw_future_targets(target_queue, grid, img):
    # Create a combined list with current queue and active target for visualization
    all_targets = list(target_queue)

    if not all_targets:
        return img

    # Create a temporary overlay image
    overlay = create_blank_canvas(img.Size.Width, img.Size.Height)

    # Count occurrences of each cell in the combined list
    cell_counts = {}
    for cell_idx in all_targets:
        if cell_idx in cell_counts:
            cell_counts[cell_idx] += 1
        else:
            cell_counts[cell_idx] = 1

    # Hard-code the intensity range to match the expected counts (1-5)
    min_possible_count = 1
    max_possible_count = 5
    
    # Define base and range for intensity scaling
    base_intensity = 50
    intensity_range = 205  # from 50 to 255
    
    # Draw each cell with brightness proportional to count
    for cell_idx, count in cell_counts.items():
        if cell_idx &lt; len(grid.cells):
            # Clamp count to our expected range just in case
            clamped_count = max(min_possible_count, min(count, max_possible_count))
            
            # Calculate normalized position in range [0-1]
            normalized_position = (clamped_count - min_possible_count) / float(max_possible_count - min_possible_count)
            
            # Calculate intensity based on position in range
            intensity = base_intensity + int(normalized_position * intensity_range)
            
            # Use a brighter, more distinct color
            target_future_color = Scalar.Rgb(0, intensity, intensity)  # Cyan

            cell = grid.cells[cell_idx]
            CV.Rectangle(overlay, cell[0], cell[1], target_future_color, thickness=-1)

    # Blend overlay with image
    alpha = 0.5
    CV.AddWeighted(img, 1.0, overlay, alpha, 0.0, img)

    return img

# Modified get_grid_location to handle the active target
def get_grid_location(grid, centroid_x, centroid_y, active_target, img):
    cell_width = grid.bounds[0] // grid.shape[0]
    cell_height = grid.bounds[1] // grid.shape[1]
    
    # Calculate grid position accounting for border
    grid_x = int(centroid_x // cell_width) - 1  # Subtract 1 to account for border
    grid_y = int(centroid_y // cell_height) - 1  # Subtract 1 to account for border
    
    target_found = False
    
    # Calculate the index in the cells list
    # Only consider valid inner grid cells
    if 0 &lt;= grid_x &lt; grid.shape[0]-2 and 0 &lt;= grid_y &lt; grid.shape[1]-2:
        # Calculate index in the flattened cells list
        cell_index = grid_y * (grid.shape[0]-2) + grid_x
        
        # Check if index is valid for the cells list
        if 0 &lt;= cell_index &lt; len(grid.cells):
            cell = grid.cells[cell_index]
            CV.Rectangle(img, cell[0], cell[1], mouse_loc_color, thickness=-1)
            
            # Check if this is the active target
            if cell_index == active_target:
                target_found = True
    
    return grid_x, grid_y, target_found

def create_blank_canvas(width, height, channels=3, color=(0, 0, 0)):
    depth = IplDepth.U8
    img = IplImage(Size(width, height), depth, channels)
    if channels == 1:
        fill_color = Scalar.All(color[0])
    else:
        fill_color = Scalar.Rgb(color[0], color[1], color[2])
    img.Set(fill_color)
    
    return img

"""
Define targets
"""
# Modified to generate targets deterministically based on probability distribution
def generate_targets(grid_cells_x, grid_cells_y, max_targets_per_cell=5, shuffle=True):
    # Initialize target distribution array
    possible_targets = (grid_cells_x-2) * (grid_cells_y-2)
    
    # Create a 2D array to store probability distribution
    base_distribution = [0] * possible_targets
    
    # Calculate centers (mean) of the grid
    center_x = (grid_cells_x - 3) / 2.0
    center_y = (grid_cells_y - 3) / 2.0
    
    # Standard deviation - adjust these values to control spread
    sigma_x = (grid_cells_x - 2) / 3.0
    sigma_y = (grid_cells_y - 2) / 3.0
    
    # Generate normal distribution of probabilities
    for y in range(grid_cells_y - 2):
        for x in range(grid_cells_x - 2):
            index = y * (grid_cells_x - 2) + x
            
            # Calculate distance from center using normal distribution
            px = math.exp(-0.5 * ((x - center_x) / sigma_x) ** 2)
            py = math.exp(-0.5 * ((y - center_y) / sigma_y) ** 2)
            
            # Combined probability
            base_distribution[index] = px * py
    
    # Normalize distribution so it sums to 1
    total_prob = sum(base_distribution)
    base_distribution = [p / total_prob for p in base_distribution]
    
    # Find max probability for scaling
    max_prob = max(base_distribution)
    
    # Quantize probabilities into discrete target counts (1 to max_targets_per_cell)
    target_counts = {}
    total_targets = 0
    
    for i, prob in enumerate(base_distribution):
        # Scale to [1, max_targets_per_cell] range
        # Cells with the highest probability get max_targets_per_cell targets
        # All cells get at least 1 target
        scaled_targets = 1 + int((prob / max_prob) * (max_targets_per_cell - 1))
        target_counts[i] = scaled_targets
        total_targets += scaled_targets
    
    # Create a flat target queue with the appropriate number of targets per cell
    target_queue = []
    for cell_idx, count in target_counts.items():
        for _ in range(count):
            target_queue.append(cell_idx)
    
    if shuffle:
        random.shuffle(target_queue)

    # Set the first active target
    active_target = None
    if target_queue:
        active_target = target_queue[0]
        target_queue = target_queue[1:]  # Remove active target from queue
    
    # Store initial cell counts for visualization
    global initial_cell_counts
    global max_initial_count
    initial_cell_counts = target_counts.copy()
    max_initial_count = max_targets_per_cell
    
    return grid_cells_x, grid_cells_y, target_queue, base_distribution, active_target

# Draw targets and distribution
def draw_targets(active_target, target_queue, grid, img, draw_distribution=False, draw_future=False):
    # First draw distribution if enabled
    if draw_distribution:
        img = draw_target_distribution(target_distribution, grid, img)
    
    # Draw future target locations if enabled
    if draw_future:
        img = draw_future_targets(target_queue, grid, img)
    
    # Then draw the active target
    if active_target is not None and active_target &lt; len(grid.cells):
        # Draw the active target
        cell = grid.cells[active_target]
        CV.Rectangle(img, cell[0], cell[1], target_color, thickness=-1)
    
    return img

# Here we define the number of grid cells to divide the arena by
grid_x = 7
grid_y = 15

# Define maximum targets per cell (quantization steps)
max_targets_per_cell = 5

# Initialize global variables
global target_queue  # Queue of upcoming targets
global active_target  # Currently active target
global target_distribution  # Normalized distribution for visualization

# Initialize grid dimensions explicitly
global grid_cells_x
global grid_cells_y
grid_cells_x = grid_x
grid_cells_y = grid_y

# Initialize target landscape with deterministic distribution
_, _, target_queue, target_distribution, active_target = generate_targets(grid_cells_x, grid_cells_y, max_targets_per_cell)

"""
Global variables
"""
# Initialize reward variables
global trial_count
global reward_left_count
global reward_right_count
global reward_state
global click
global click_start_time
global drinking
global reward_left
global reward_right
global reward_left_start_time
global reward_right_start_time

trial_count = 0
reward_left_count = 0
reward_right_count = 0
reward_state = True
click = False
click_start_time = 0
drinking = False
reward_left = False
reward_right = False
reward_left_start_time = 0
reward_right_start_time = 0

# ITI Variables
global iti_start_time
global iti_duration
global in_iti
global withdrawal_start_time
global in_withdrawal_period
global prev_poke_left
global prev_poke_right

iti_start_time = 0
iti_duration = 0
in_iti = False
withdrawal_start_time = 0
in_withdrawal_period = False
prev_poke_left = False
prev_poke_right = False

"""
# Visualization parameters
"""
centroid_color = Scalar.Rgb(255, 255, 255)
mouse_loc_color = Scalar.Rgb(255, 0, 0)
target_color = Scalar.Rgb(255, 255, 255)
grid_color = Scalar.Rgb(128, 128, 128)
centroid_radius = 5

"""
Execute task
"""

@returns(tuple)
def process(value):
    # Declare global vars
    global trial_count
    global reward_left_count
    global reward_right_count
    global target_queue
    global active_target
    global target_distribution
    global reward_state
    global click
    global click_start_time
    global drinking
    global reward_left
    global reward_right
    global reward_left_start_time
    global reward_right_start_time
    global iti_start_time
    global iti_duration
    global in_iti
    global withdrawal_start_time
    global in_withdrawal_period
    global prev_poke_left
    global prev_poke_right
    global grid_cells_x
    global grid_cells_y

    # Timing-related vars
    current_time = time.time()
    reward_duration_left = 0.032
    reward_duration_right = 0.032
    click_duration = 0.1
    iti_duration_min = 1.0
    iti_duration_max = 5.0
    withdrawal_duration = 0.5
    
    # Flag to track if target was found in this frame
    target_found_this_frame = False

    # Load realtime variables from Zip node
    centroid_x, centroid_y, image = value[0].Item1, value[0].Item2, value[0].Item3
    poke_left, poke_right = bool(value[1][0]), bool(value[1][1])

    # Process grid and canvas
    grid_loc_x, grid_loc_y = None, None
    img_dims = get_image_shape(image)
    grid = GridMaze(img_dims, [grid_cells_x, grid_cells_y])
    canvas = create_blank_canvas(img_dims[0], img_dims[1])
    
    # Draw targets and distribution
    draw_targets(active_target, target_queue, grid, canvas, draw_distribution=False, draw_future=True)

    # Process mouse position and check for target
    if not (math.isnan(centroid_x) or math.isnan(centroid_y)):
        grid_loc_x, grid_loc_y, target_found_this_frame = get_grid_location(grid, centroid_x, centroid_y, active_target, canvas)
        CV.Circle(canvas, Point(int(centroid_x), int(centroid_y)), centroid_radius, centroid_color, -1)
        
        # If target found and we're not in reward state yet
        if target_found_this_frame and active_target is not None and not reward_state:
            # Remove the found target
            active_target = None
            
            # Trigger reward state
            reward_state = True
            click = True
            click_start_time = current_time

    # State machine logic
    if in_iti:
        if current_time - iti_start_time &gt;= iti_duration:
            trial_count += 1
            in_iti = False
            
            # Set next target if we need to (only if active target is None)
            if active_target is None and target_queue:
                active_target = target_queue[0]
                target_queue = target_queue[1:]
            
    elif in_withdrawal_period:
        if not (poke_left or poke_right):  # Mouse has withdrawn
            if current_time - withdrawal_start_time &gt;= withdrawal_duration:
                in_withdrawal_period = False
                in_iti = True
                iti_start_time = current_time
                iti_duration = random.uniform(iti_duration_min, iti_duration_max)
        else:  # Mouse is still poking, reset withdrawal timer
            withdrawal_start_time = current_time
            
    elif reward_state:
        if reward_left and current_time - reward_left_start_time &gt;= reward_duration_left:
            reward_left = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif reward_right and current_time - reward_right_start_time &gt;= reward_duration_right:
            reward_right = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif poke_left and not reward_left and not reward_right:
            reward_left = True
            reward_left_count += 1
            reward_left_start_time = current_time
        elif poke_right and not reward_right and not reward_left:
            reward_right = True
            reward_right_count += 1
            reward_right_start_time = current_time

    # Handle click duration
    if click and current_time - click_start_time &gt;= click_duration:
        click = False

    # Update previous poke states and set drinking state
    prev_poke_left, prev_poke_right = poke_left, poke_right
    drinking = poke_left or poke_right

    # Convert target_queue to tuple for return
    queue_tuple = tuple(target_queue) if target_queue else tuple()
    
    # Return values
    return (canvas, Point(centroid_x, centroid_y), reward_state, reward_left, reward_right, 
            poke_left, poke_right, drinking, in_iti, click, active_target, 
            trial_count, reward_left_count, reward_right_count, tuple(target_distribution))</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Grid Visualization</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  return value[0]

</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Trial Count</ipy:Name>
        <ipy:Script># Get trial count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Left</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[5]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Right</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[6]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Mouse Centroid</ipy:Name>
        <ipy:Script>clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(Point)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Active Target</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  return str(value[10])</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEventsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\tetrode_ob-hc\testttt\a5\05142025_testttt_a5_eventsA.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Item1,Item2,Item3,Item4,Item5,Item6</io:Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ITI</ipy:Name>
        <ipy:Script># ITI status

@returns(bool)
def process(value):
  return value[8]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward State</ipy:Name>
        <ipy:Script># Get reward state

@returns(bool)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>4</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Left</ipy:Name>
        <ipy:Script># Get reward_left state

@returns(bool)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Right</ipy:Name>
        <ipy:Script># Get reward_right state and reward state

@returns(bool)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Click</ipy:Name>
        <ipy:Script># Get click state (click is always last item in return statement)

@returns(bool)
def process(value):
  return value[9]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Right Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-2]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Left Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Combine Trial Counts</ipy:Name>
        <ipy:Description />
        <ipy:Script>@returns(str)
def process(value):
  reward_r = str(value.Item1)
  reward_l = str(value.Item2)
  total = str(value.Item1 + value.Item2)
  trial_info = "Left: " + reward_l + " Right: " + reward_r + " Total: " + total
  return trial_info</ipy:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCountsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>D:\clickbait-place\data\tetrode_ob-hc\testttt\a5\05142025_testttt_a5_trialcounts.txt</io:Path>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialRewardsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\tetrode_ob-hc\testttt\a5\05142025_testttt_a5_eventsB.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Air Flip</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
                <gl:Period>PT30M</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(tuple)
def process(value):
    time_period = value.Item1
    session_num = int(value.Item2[1:])

    if session_num % 2 == 0:
      if time_period == 0:
        return (True, False)
      else:
        return (False, True)

    else:
      if time_period == 0:
        return (False, True)
      else:
        return (True, False)</ipy:Script>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Left Air</ipy:Name>
              <ipy:Script>@returns(bool)
def process(value):
  return value[0]</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>48</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Right Air</ipy:Name>
              <ipy:Script>@returns(bool)
def process(value):
  return value[1]</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>49</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>128</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:AnalogOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>3</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Monitor Flip</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3840</gl:Width>
                <gl:Height>1280</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>3840</gl:X>
                  <gl:Y>0</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>30</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                    <gl:Name>stimulus_monitor_2</gl:Name>
                    <gl:Width>1280</gl:Width>
                    <gl:Height>1920</gl:Height>
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>D:\clickbait-place\stimuli\1515_b5_binary_m2.mp4</gl:FileName>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                    <gl:FrameCount xsi:nil="true" />
                    <gl:StartPosition>0</gl:StartPosition>
                    <gl:BufferLength xsi:nil="true" />
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                    <gl:Name>blank_screen</gl:Name>
                    <gl:Width>1280</gl:Width>
                    <gl:Height>1920</gl:Height>
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>D:\clickbait-place\stimuli\blank.mp4</gl:FileName>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                    <gl:FrameCount xsi:nil="true" />
                    <gl:StartPosition>0</gl:StartPosition>
                    <gl:BufferLength xsi:nil="true" />
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
                <gl:Period>PT5M</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(float)
def process(value):
    time_period = value.Item1
    session_num = int(value.Item2[1:])

    if session_num % 2 == 0:
      if time_period == 0:
        return 1.5
      else:
        return -1.5

    else:
      if time_period == 0:
        return -1.5
      else:
        return 1.5</ipy:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
                <TextureName>blank_screen</TextureName>
                <PlaybackRate>0</PlaybackRate>
                <Loop>true</Loop>
                <Angle>0</Angle>
                <ExtentX>2.96</ExtentX>
                <ExtentY>2</ExtentY>
                <LocationX>1.5</LocationX>
                <LocationY>0</LocationY>
                <ScaleX>1</ScaleX>
                <ScaleY>1</ScaleY>
                <ShiftX>0</ShiftX>
                <ShiftY>0</ShiftY>
                <Layer>0</Layer>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="16" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filename Definitions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Name>Get Start Timestamp</ipy:Name>
              <ipy:Script>from System import DateTime

# Get timestamp from beginning of session

@returns(DateTime)
def generate():
  yield DateTime.Now
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionStart</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Date</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>File naming info</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File naming info</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_video_timestamp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoTimestamp</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_amplifierdata</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AmplifierDataFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_daq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DAQData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_occupancy</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>JPG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>HistogramFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_trialcounts</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TXT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialCountsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialEventsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialRewardsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.jpg</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>JPG</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>CSV</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AVI</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.txt</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TXT</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>BIN</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source4" />
            <Edge From="6" To="7" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="34" Label="Source2" />
            <Edge From="33" To="34" Label="Source3" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="42" Label="Source1" />
            <Edge From="40" To="42" Label="Source2" />
            <Edge From="41" To="42" Label="Source3" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="55" To="58" Label="Source1" />
            <Edge From="56" To="58" Label="Source2" />
            <Edge From="57" To="58" Label="Source3" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="63" To="66" Label="Source1" />
            <Edge From="64" To="66" Label="Source2" />
            <Edge From="65" To="66" Label="Source3" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="74" Label="Source1" />
            <Edge From="72" To="74" Label="Source2" />
            <Edge From="73" To="74" Label="Source3" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Date" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>05252025</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Date</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Duration (Minutes)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>60</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>SessionDuration</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="MouseID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>7001</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>MouseID</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Num." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>04</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Session Number</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Implant Type" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>tetrode_ob-hc</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ExpName</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Data Directory" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>D:/clickbait-place/data/</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExpName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseID</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Session Number</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Path</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="4" To="18" Label="Source1" />
      <Edge From="4" To="27" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="16" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="28" Label="Source1" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="27" To="28" Label="Source3" />
      <Edge From="28" To="36" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="35" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="37" To="40" Label="Source1" />
      <Edge From="37" To="42" Label="Source1" />
      <Edge From="37" To="43" Label="Source1" />
      <Edge From="37" To="44" Label="Source1" />
      <Edge From="37" To="45" Label="Source1" />
      <Edge From="37" To="50" Label="Source1" />
      <Edge From="37" To="52" Label="Source1" />
      <Edge From="37" To="55" Label="Source1" />
      <Edge From="37" To="57" Label="Source1" />
      <Edge From="37" To="59" Label="Source1" />
      <Edge From="37" To="61" Label="Source1" />
      <Edge From="37" To="62" Label="Source1" />
      <Edge From="39" To="46" Label="Source1" />
      <Edge From="39" To="63" Label="Source3" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="46" Label="Source2" />
      <Edge From="42" To="46" Label="Source3" />
      <Edge From="43" To="46" Label="Source4" />
      <Edge From="44" To="46" Label="Source5" />
      <Edge From="45" To="46" Label="Source6" />
      <Edge From="46" To="49" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source2" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="50" To="68" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="52" To="54" Label="Source1" />
      <Edge From="52" To="68" Label="Source2" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="55" To="68" Label="Source3" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="57" To="68" Label="Source4" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="59" To="68" Label="Source5" />
      <Edge From="61" To="63" Label="Source1" />
      <Edge From="62" To="63" Label="Source2" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="67" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source2" />
      <Edge From="68" To="71" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source2" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="79" To="80" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="99" Label="Source1" />
      <Edge From="92" To="99" Label="Source2" />
      <Edge From="93" To="99" Label="Source3" />
      <Edge From="94" To="99" Label="Source4" />
      <Edge From="95" To="99" Label="Source5" />
      <Edge From="96" To="99" Label="Source6" />
      <Edge From="97" To="99" Label="Source7" />
      <Edge From="98" To="99" Label="Source8" />
      <Edge From="99" To="100" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>