<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:eph="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino Mega 2560</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:Rhd2000EvalBoard">
          <eph:BitFileName>C:\Program Files\Open Ephys\shared\rhd2000.bit</eph:BitFileName>
          <eph:SampleRate>SampleRate1000Hz</eph:SampleRate>
          <eph:ExternalFastSettleEnabled>false</eph:ExternalFastSettleEnabled>
          <eph:LowerBandwidth>0.1</eph:LowerBandwidth>
          <eph:UpperBandwidth>7500</eph:UpperBandwidth>
          <eph:DspCutoffFrequency>1</eph:DspCutoffFrequency>
          <eph:DspEnabled>false</eph:DspEnabled>
          <eph:CableDelayA xsi:nil="true" />
          <eph:CableDelayB xsi:nil="true" />
          <eph:CableDelayC xsi:nil="true" />
          <eph:CableDelayD xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BoardAdcData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>7</dsp:int>
            <dsp:int>6</dsp:int>
            <dsp:int>5</dsp:int>
            <dsp:int>4</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Rhd2000Filename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\clickbait-place\data\dry-morris-maze-multisensory\3001\s12\060126_3001_s12_rhd2000.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pylon:PylonCapture">
          <pylon:SerialNumber>24714376</pylon:SerialNumber>
          <pylon:ParameterFile>acA2040-90umNIR_24714376.pfs</pylon:ParameterFile>
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\clickbait-place\data\dry-morris-maze-multisensory\3001\s12\060126_3001_s12.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoTimestamp</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\dry-morris-maze-multisensory\3001\s12\060126_3001_s12_video_timestamp.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionStart</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Session Timer</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("System.Windows.Forms")
from System.Windows.Forms import SendKeys
from System.Diagnostics import Process
from System import TimeSpan, DateTime
import time

import ctypes
user32 = ctypes.WinDLL('user32', use_last_error=True)



def focus_window(window_title):
    # Find all windows with matching title
    processes = Process.GetProcesses()
    for process in processes:
        if process.MainWindowTitle.lower().find(window_title.lower()) != -1:
            # Bring window to front and focus it
            hwnd = process.MainWindowHandle.ToInt32()
            if hwnd:
                user32.SetForegroundWindow(hwnd)
                return True
    return False

@returns(str)
def process(value):
    now = value[1]
    start_time = value[0][0]
    duration = TimeSpan.FromMinutes(value[0][1]) + TimeSpan.FromMinutes(.5)  # Add 10 seconds to pad startup time

    format_string = "{minutes:02d}:{seconds:02d}"

    elapsed = now - start_time
    remaining = duration - elapsed
    
    minutes = int(remaining.TotalMinutes)
    seconds = int(remaining.Seconds)
    countdown = str("Time remaining: " + format_string.format(minutes=minutes, seconds=seconds))

    if minutes &lt;= 0 and seconds &lt;= 0:
        focus_window("clickbait_place_master")
        countdown = "Time's up!"
        SendKeys.SendWait("+{F5}")

    return countdown
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>27</cv:Size1>
          <cv:Size2>27</cv:Size2>
          <cv:Sigma1>20</cv:Sigma1>
          <cv:Sigma2>20</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>64</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>12</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>40</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Left</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>Poke Right</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Clickbait Task</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *
import math
import time
import random
import System
from System import Array

# Class to generate maze coordinates
class GridMaze:
    def __init__(self, maze_bounds, maze_dims):
        self.bounds = maze_bounds
        self.shape = maze_dims
        
        cellsize_x = maze_bounds[0] // maze_dims[0]
        cellsize_y = maze_bounds[1] // maze_dims[1]
        
        # Generate Grid
        self.cells = [
            (Point(x * cellsize_x, y * cellsize_y), 
             Point((x + 1) * cellsize_x, (y + 1) * cellsize_y))
            for y in range(1,self.shape[1]-1)
            for x in range(1,self.shape[0]-1)
        ]

def draw_grid(grid, img):
    for cell in grid.cells:
        CV.Rectangle(img, cell[0], cell[1], grid_color, thickness=2)

# Function to extract dims from image
def get_image_shape(img):
    size = img.Size
    return [size.Width, size.Height]

def draw_future_targets(target_queue, grid, img):
    """Draw upcoming random targets from the queue. Each cell appears at most once."""
    all_targets = list(target_queue)

    if not all_targets:
        return img

    overlay = create_blank_canvas(img.Size.Width, img.Size.Height)

    # With uniform distribution, each cell appears at most once — fixed intensity
    target_future_color = Scalar.Rgb(0, 150, 150)  # Cyan

    for cell_idx in all_targets:
        if cell_idx &lt; len(grid.cells):
            cell = grid.cells[cell_idx]
            CV.Rectangle(overlay, cell[0], cell[1], target_future_color, thickness=-1)

    alpha = 0.5
    CV.AddWeighted(img, 1.0, overlay, alpha, 0.0, img)

    return img

# Modified get_grid_location to handle the active target
def get_grid_location(grid, centroid_x, centroid_y, active_target, img):
    cell_width = grid.bounds[0] // grid.shape[0]
    cell_height = grid.bounds[1] // grid.shape[1]
    
    # Calculate grid position accounting for border
    grid_x = int(centroid_x // cell_width) - 1  # Subtract 1 to account for border
    grid_y = int(centroid_y // cell_height) - 1  # Subtract 1 to account for border
    
    target_found = False
    
    # Calculate the index in the cells list
    # Only consider valid inner grid cells
    if 0 &lt;= grid_x &lt; grid.shape[0]-2 and 0 &lt;= grid_y &lt; grid.shape[1]-2:
        # Calculate index in the flattened cells list
        cell_index = grid_y * (grid.shape[0]-2) + grid_x
        
        # Check if index is valid for the cells list
        if 0 &lt;= cell_index &lt; len(grid.cells):
            cell = grid.cells[cell_index]
            CV.Rectangle(img, cell[0], cell[1], mouse_loc_color, thickness=-1)
            
            # Check if this is the active target
            if cell_index == active_target:
                target_found = True
    
    return grid_x, grid_y, target_found

def create_blank_canvas(width, height, channels=3, color=(0, 0, 0)):
    depth = IplDepth.U8
    img = IplImage(Size(width, height), depth, channels)
    if channels == 1:
        fill_color = Scalar.All(color[0])
    else:
        fill_color = Scalar.Rgb(color[0], color[1], color[2])
    img.Set(fill_color)
    
    return img

"""
Define targets
"""

# Platform dimensions in full-grid cell units (standard corner platforms)
PLATFORM_COLS = 2
PLATFORM_ROWS = 4

# Compound (split-cue) trial states: a 1-col x 4-row vertical strip
# centered horizontally between the two corner stimuli that face each other.
#   state 4 -&gt; upper compound (between UR and UL)
#   state 5 -&gt; lower compound (between LR and LL)
COMPOUND_STATES = (4, 5)
COMPOUND_PLATFORM_COLS = 1
COMPOUND_PLATFORM_ROWS = 4

def get_platform_dims(flip_state):
    """Return (cols, rows) for the platform footprint of the given flip_state."""
    if flip_state in COMPOUND_STATES:
        return COMPOUND_PLATFORM_COLS, COMPOUND_PLATFORM_ROWS
    return PLATFORM_COLS, PLATFORM_ROWS

def get_platform_corner(flip_state, grid_cells_x, grid_cells_y):
    """Return (col_start, row_start) in full-grid cell units for the given flip_state.
    
    Standard corner platforms (PLATFORM_COLS x PLATFORM_ROWS):
      flip_state 0 -&gt; upper right
      flip_state 1 -&gt; lower left
      flip_state 2 -&gt; lower right
      flip_state 3 -&gt; upper left
    Compound platforms (COMPOUND_PLATFORM_COLS x COMPOUND_PLATFORM_ROWS, in middle column):
      flip_state 4 -&gt; upper compound (between UR and UL)
      flip_state 5 -&gt; lower compound (between LR and LL)
    """
    cols, rows = get_platform_dims(flip_state)
    if flip_state == 0:
        col_start = grid_cells_x - cols
        row_start = 1
    elif flip_state == 1:
        col_start = 0
        row_start = grid_cells_y - 1 - rows
    elif flip_state == 2:
        col_start = grid_cells_x - cols
        row_start = grid_cells_y - 1 - rows
    elif flip_state == 3:
        col_start = 0
        row_start = 1
    elif flip_state == 4:
        # Upper compound: middle column, top rows (mirrors UR/UL row range)
        col_start = grid_cells_x // 2
        row_start = 1
    elif flip_state == 5:
        # Lower compound: middle column, bottom rows (mirrors LR/LL row range)
        col_start = grid_cells_x // 2
        row_start = grid_cells_y - 1 - rows
    else:
        raise ValueError("Unknown flip_state: %r" % (flip_state,))
    return col_start, row_start

def get_platform_rect(flip_state, grid_cells_x, grid_cells_y, img_dims):
    """Return the platform cell as a (Point, Point) pixel rectangle in the border ring.
    
    See get_platform_corner for state -&gt; corner mapping.
    Returns (top_left_Point, bottom_right_Point).
    """
    cell_w = img_dims[0] // grid_cells_x
    cell_h = img_dims[1] // grid_cells_y
    
    cols, rows = get_platform_dims(flip_state)
    col_start, row_start = get_platform_corner(flip_state, grid_cells_x, grid_cells_y)
    
    tl = Point(col_start * cell_w, row_start * cell_h)
    br = Point((col_start + cols) * cell_w, (row_start + rows) * cell_h)
    return (tl, br)

def get_platform_excluded_cells(flip_state, grid_cells_x, grid_cells_y):
    """Return the set of inner-grid cell indices that overlap with the platform rect.
    
    The platform spans full-grid cells; any that fall within the inner grid
    (full-grid cols 1 to grid_cells_x-2, rows 1 to grid_cells_y-2) are excluded.
    """
    inner_cols = grid_cells_x - 2
    inner_rows = grid_cells_y - 2
    
    cols, rows = get_platform_dims(flip_state)
    col_start, row_start = get_platform_corner(flip_state, grid_cells_x, grid_cells_y)
    
    excluded = set()
    for fg_row in range(row_start, row_start + rows):
        for fg_col in range(col_start, col_start + cols):
            # Convert full-grid coords to inner-grid coords
            inner_col = fg_col - 1
            inner_row = fg_row - 1
            if 0 &lt;= inner_col &lt; inner_cols and 0 &lt;= inner_row &lt; inner_rows:
                idx = inner_row * inner_cols + inner_col
                excluded.add(idx)
    
    return excluded

def centroid_in_rect(cx, cy, rect):
    """Check whether centroid (cx, cy) falls within a (Point, Point) rectangle."""
    tl, br = rect
    return tl.X &lt;= cx &lt; br.X and tl.Y &lt;= cy &lt; br.Y

def generate_targets(grid_cells_x, grid_cells_y, excluded_cells):
    """Generate a shuffled queue of all inner-grid cell indices (one per cell),
    excluding cells that overlap with the platform.
    
    Returns (target_queue, active_target).
    active_target is the first item popped from the queue.
    """
    inner_cols = grid_cells_x - 2
    inner_rows = grid_cells_y - 2
    total_cells = inner_cols * inner_rows
    
    all_cells = [i for i in range(total_cells) if i not in excluded_cells]
    random.shuffle(all_cells)
    
    # Pop the first target
    active_target = all_cells[0]
    target_queue = all_cells[1:]
    
    return target_queue, active_target

def regenerate_queue(grid_cells_x, grid_cells_y, excluded_cells):
    """Re-shuffle a fresh full set of targets and pop the first one."""
    return generate_targets(grid_cells_x, grid_cells_y, excluded_cells)

# Draw targets
def draw_targets(active_target, target_queue, grid, img, trial_phase, platform_rect=None, draw_future=False):
    # Draw future random target locations if enabled
    if draw_future:
        img = draw_future_targets(target_queue, grid, img)
    
    if trial_phase == "platform" and platform_rect is not None:
        # Draw the platform target using its pixel rect (border cell)
        CV.Rectangle(img, platform_rect[0], platform_rect[1], platform_target_color, thickness=-1)
    elif trial_phase == "interim" and platform_rect is not None:
        # Platform found — show it in green
        CV.Rectangle(img, platform_rect[0], platform_rect[1], platform_found_color, thickness=-1)
    elif active_target is not None and active_target &lt; len(grid.cells):
        # Draw the active random target from the inner grid
        cell = grid.cells[active_target]
        CV.Rectangle(img, cell[0], cell[1], target_color, thickness=-1)
    
    return img

# Here we define the number of grid cells to divide the arena by
grid_x = 7
grid_y = 15

# Flip schedule parameters
# ALLOWED_STATES selects which platform locations are used in this session.
# State -&gt; location:
#   0 = upper right (corner, visual cue)
#   1 = lower left  (corner, visual cue)
#   2 = lower right (corner, odor cue)
#   3 = upper left  (corner, odor cue)
#   4 = upper compound (between UR and UL; visual + odor simultaneously)
#   5 = lower compound (between LR and LL; visual + odor simultaneously)
# Examples:
#   ALLOWED_STATES = [0, 1]              # original two-state task
#   ALLOWED_STATES = [0, 1, 2, 3]        # four corner-platform task
#   ALLOWED_STATES = [0, 1, 2, 3, 4, 5]  # full task with compound trials
ALLOWED_STATES = [0, 1, 2, 3, 4, 5]

INITIAL_BLOCK_TRIALS = 1          # Trials per initial fixed block (one block per allowed state)
PSEUDORANDOM_TRIALS_PER_STATE = 50 # Trials per standard state (0-3) in the pseudorandom phase
COMPOUND_TRIALS_UPPER = 25         # Trials for state 4 (~10% of 250-trial session)
COMPOUND_TRIALS_LOWER = 25         # Trials for state 5 (~10% of 250-trial session)
MAX_CONSECUTIVE_SAME_STATE = 3     # Max allowed run length in pseudorandom phase

# Compound trial behavior parameters
COMPOUND_DWELL_TIME = 0.5          # Required contiguous centroid dwell on platform (sec); resets on exit
COMPOUND_TIMEOUT    = 60.0         # Max trial duration from platform-phase start (sec); incorrect if not earned

def _trials_per_state(state):
    """Per-state trial count for the pseudorandom phase."""
    if state == 4:
        return COMPOUND_TRIALS_UPPER
    elif state == 5:
        return COMPOUND_TRIALS_LOWER
    return PSEUDORANDOM_TRIALS_PER_STATE

def generate_flip_schedule():
    """Build a trial-by-trial flip-state schedule across ALLOWED_STATES.
    
    Phase 1: INITIAL_BLOCK_TRIALS trials per allowed state, in the order given by ALLOWED_STATES.
    Phase 2: pseudorandom — PSEUDORANDOM_TRIALS_PER_STATE trials per allowed state, shuffled
             so that no more than MAX_CONSECUTIVE_SAME_STATE consecutive trials share a state.
    
    With len(ALLOWED_STATES) == 2 and identical totals this reproduces the original
    two-state schedule (modulo the initial-block ordering).
    """
    if not ALLOWED_STATES:
        raise ValueError("ALLOWED_STATES must contain at least one state")
    
    schedule = []
    
    # Phase 1: one fixed block per allowed state, in the order listed
    for s in ALLOWED_STATES:
        schedule.extend([s] * INITIAL_BLOCK_TRIALS)
    
    # Phase 2: pseudorandom across all allowed states
    pseudo = []
    for s in ALLOWED_STATES:
        pseudo.extend([s] * _trials_per_state(s))
    random.shuffle(pseudo)
    
    # Scan-and-fix: find runs exceeding the max and swap the first excess
    # element with the nearest different-valued element that won't create
    # a new violation at the destination.
    # (Single-state special case: nothing to fix; skip.)
    if len(ALLOWED_STATES) &gt; 1:
        for _safety in range(1000):
            # Find first run that exceeds the limit
            violation = -1
            i = 0
            while i &lt; len(pseudo):
                run_start = i
                while i &lt; len(pseudo) and pseudo[i] == pseudo[run_start]:
                    i += 1
                if i - run_start &gt; MAX_CONSECUTIVE_SAME_STATE:
                    violation = run_start + MAX_CONSECUTIVE_SAME_STATE
                    break
            
            if violation == -1:
                break  # No violations remain
            
            swap_val = pseudo[violation]
            
            # Search for the nearest safe swap partner (different value, and inserting
            # swap_val at that position won't exceed the run limit there)
            best_j = None
            best_dist = len(pseudo)
            for j in range(len(pseudo)):
                if pseudo[j] == swap_val:
                    continue
                # Count the run of swap_val neighbours that j would join
                run_at_j = 1
                k = j - 1
                while k &gt;= 0 and pseudo[k] == swap_val:
                    run_at_j += 1
                    k -= 1
                k = j + 1
                while k &lt; len(pseudo) and pseudo[k] == swap_val:
                    run_at_j += 1
                    k += 1
                if run_at_j &lt;= MAX_CONSECUTIVE_SAME_STATE:
                    dist = abs(j - violation)
                    if dist &lt; best_dist:
                        best_dist = dist
                        best_j = j
            
            if best_j is not None:
                pseudo[violation], pseudo[best_j] = pseudo[best_j], pseudo[violation]
            else:
                # No safe swap available — reshuffle and retry
                random.shuffle(pseudo)
    
    schedule.extend(pseudo)
    return schedule

# Initialize grid dimensions explicitly
global grid_cells_x
global grid_cells_y
grid_cells_x = grid_x
grid_cells_y = grid_y

# Initialize flip schedule
global flip_schedule
global flip_schedule_index
global flip_state

flip_schedule = generate_flip_schedule()
flip_schedule_index = 0
flip_state = flip_schedule[0]  # Start at the first state in the generated schedule

# Initialize target landscape: uniform, one per inner cell (excluding platform overlap)
global platform_rect
global platform_excluded
global target_queue
global active_target
global trial_phase

platform_rect = None  # Computed on first process() call when image dims are available
platform_excluded = get_platform_excluded_cells(flip_state, grid_cells_x, grid_cells_y)
target_queue, active_target = generate_targets(grid_cells_x, grid_cells_y, platform_excluded)
trial_phase = "random"  # Each trial starts seeking the random target

"""
Global variables
"""
# Initialize reward variables
global trial_count
global reward_left_count
global reward_right_count
global reward_state
global click
global click_start_time
global click_count
global click_total
global drinking
global reward_left
global reward_right
global reward_left_start_time
global reward_right_start_time
global punishment_count

trial_count = 0
reward_left_count = 0
reward_right_count = 0
reward_state = True  # Free reward on first trial
click = False
click_start_time = 0
click_count = 0     # How many clicks have been delivered so far in current sequence
click_total = 0     # How many clicks total in current sequence (1 for random, 3 for platform)
drinking = False
reward_left = False
reward_right = False
reward_left_start_time = 0
reward_right_start_time = 0
punishment_count = 0

# Compound trial state
global dwell_start_time
global compound_trial_start_time
global compound_incorrect_count

dwell_start_time = None         # Time mouse entered platform on current uninterrupted visit (None if outside)
compound_trial_start_time = 0   # current_time at start of compound "platform" phase (for 90s timeout)
compound_incorrect_count = 0    # Number of compound trials that timed out without reward

# ITI Variables
global iti_start_time
global iti_duration
global in_iti
global withdrawal_start_time
global in_withdrawal_period
global prev_poke_left
global prev_poke_right

iti_start_time = 0
iti_duration = 0
in_iti = False
withdrawal_start_time = 0
in_withdrawal_period = False
prev_poke_left = False
prev_poke_right = False

"""
# Visualization parameters
"""
centroid_color = Scalar.Rgb(255, 255, 255)
mouse_loc_color = Scalar.Rgb(255, 0, 0)
target_color = Scalar.Rgb(255, 255, 255)          # Random target: white
platform_target_color = Scalar.Rgb(255, 255, 0)   # Platform target: yellow
platform_found_color = Scalar.Rgb(0, 255, 0)      # Platform found: green
grid_color = Scalar.Rgb(128, 128, 128)
centroid_radius = 5

"""
Execute task
"""

@returns(tuple)
def process(value):
    # Declare global vars
    global trial_count
    global reward_left_count
    global reward_right_count
    global target_queue
    global active_target
    global platform_rect
    global platform_excluded
    global trial_phase
    global reward_state
    global click
    global click_start_time
    global click_count
    global click_total
    global drinking
    global reward_left
    global reward_right
    global reward_left_start_time
    global reward_right_start_time
    global punishment_count
    global iti_start_time
    global iti_duration
    global in_iti
    global withdrawal_start_time
    global in_withdrawal_period
    global prev_poke_left
    global prev_poke_right
    global grid_cells_x
    global grid_cells_y
    global flip_state
    global flip_schedule
    global flip_schedule_index
    global dwell_start_time
    global compound_trial_start_time
    global compound_incorrect_count

    # Timing-related vars
    current_time = time.time()
    reward_duration_left = 0.032
    reward_duration_right = 0.032
    click_duration = 0.1          # Duration of each click pulse
    click_gap = 0.1               # Gap between consecutive clicks
    iti_duration_min = 1.0
    iti_duration_max = 5.0
    withdrawal_duration = 0.5
    
    # Flag to track if target was found in this frame
    target_found_this_frame = False
    platform_found_this_frame = False

    # Load realtime variables from Zip node
    centroid_x, centroid_y, image = value[0].Item1, value[0].Item2, value[0].Item3
    poke_left, poke_right = bool(value[1][0]), bool(value[1][1])

    # Process grid and canvas
    grid_loc_x, grid_loc_y = None, None
    img_dims = get_image_shape(image)
    grid = GridMaze(img_dims, [grid_cells_x, grid_cells_y])
    canvas = create_blank_canvas(img_dims[0], img_dims[1])
    
    # Compute platform_rect on first call (needs image dims)
    if platform_rect is None:
        platform_rect = get_platform_rect(flip_state, grid_cells_x, grid_cells_y, img_dims)
    
    # Draw targets (future overlay only shown during random phase)
    draw_targets(active_target, target_queue, grid, canvas, trial_phase,
                 platform_rect=platform_rect, draw_future=(trial_phase == "random"))

    # Process mouse position and check for target
    if not (math.isnan(centroid_x) or math.isnan(centroid_y)):
        grid_loc_x, grid_loc_y, target_found_this_frame = get_grid_location(grid, centroid_x, centroid_y, active_target, canvas)
        CV.Circle(canvas, Point(int(centroid_x), int(centroid_y)), centroid_radius, centroid_color, -1)
        
        # Check platform cell separately (border cell, not in grid.cells)
        if trial_phase == "platform":
            platform_found_this_frame = centroid_in_rect(centroid_x, centroid_y, platform_rect)
        
        # Two-target trial logic
        if not reward_state and not in_iti and not in_withdrawal_period:
            if trial_phase == "random" and target_found_this_frame and active_target is not None:
                # Random target found -&gt; single click, switch to platform target
                click = True
                click_start_time = current_time
                click_count = 1
                click_total = 1
                active_target = None  # No inner-grid target active during platform phase
                trial_phase = "platform"
                # Arm compound-trial timer; reset dwell accumulator
                if flip_state in COMPOUND_STATES:
                    compound_trial_start_time = current_time
                    dwell_start_time = None
                
            elif trial_phase == "platform":
                if flip_state in COMPOUND_STATES:
                    # Compound: must dwell COMPOUND_DWELL_TIME seconds contiguously on the platform.
                    # Leaving the rect resets the accumulator.
                    if platform_found_this_frame:
                        if dwell_start_time is None:
                            dwell_start_time = current_time
                        elif current_time - dwell_start_time &gt;= COMPOUND_DWELL_TIME:
                            # Dwell satisfied -&gt; triple click, enable reward, enter interim phase
                            click = True
                            click_start_time = current_time
                            click_count = 1
                            click_total = 3
                            reward_state = True
                            trial_phase = "interim"
                            dwell_start_time = None
                    else:
                        # Mouse outside the rect -&gt; reset dwell timer
                        dwell_start_time = None
                elif platform_found_this_frame:
                    # Standard corner platform: instantaneous detection
                    click = True
                    click_start_time = current_time
                    click_count = 1
                    click_total = 3
                    reward_state = True
                    trial_phase = "interim"

    # End-of-trial handling for failed platform phase:
    #   - Standard (corner) states: any reward poke before reaching the platform -&gt; punishment, ITI
    #   - Compound states 4/5: premature pokes are ignored; trial ends only if
    #     COMPOUND_TIMEOUT seconds elapse without the dwell being satisfied -&gt; incorrect, ITI
    if trial_phase == "platform" and not reward_state and not in_iti and not in_withdrawal_period:
        if flip_state in COMPOUND_STATES:
            if current_time - compound_trial_start_time &gt;= COMPOUND_TIMEOUT:
                # Compound trial timed out without reward -&gt; incorrect trial
                compound_incorrect_count += 1
                active_target = None
                dwell_start_time = None
                trial_phase = "random"  # Reset phase for next trial
                in_iti = True
                iti_start_time = current_time
                iti_duration = random.uniform(iti_duration_min, iti_duration_max)
        elif (poke_left or poke_right):
            # Punish: burn this trial, skip to ITI
            punishment_count += 1
            active_target = None
            trial_phase = "random"  # Reset phase for next trial
            in_iti = True
            iti_start_time = current_time
            iti_duration = random.uniform(iti_duration_min, iti_duration_max)

    # State machine logic
    if in_iti:
        if current_time - iti_start_time &gt;= iti_duration:
            trial_count += 1
            in_iti = False
            
            # Advance flip schedule and check for state change
            flip_schedule_index += 1
            if flip_schedule_index &lt; len(flip_schedule):
                next_state = flip_schedule[flip_schedule_index]
            else:
                # Schedule exhausted — hold current state
                next_state = flip_state
            
            if next_state != flip_state:
                flip_state = next_state
                # Update platform rect and excluded cells for new state
                platform_rect = get_platform_rect(flip_state, grid_cells_x, grid_cells_y, img_dims)
                platform_excluded = get_platform_excluded_cells(flip_state, grid_cells_x, grid_cells_y)
                
                # Filter any newly-excluded cells out of existing queue
                target_queue = [c for c in target_queue if c not in platform_excluded]
            
            # Start next trial: pop next random target from queue
            if target_queue:
                active_target = target_queue[0]
                target_queue = target_queue[1:]
            else:
                # Queue exhausted — re-shuffle full set
                target_queue, active_target = regenerate_queue(grid_cells_x, grid_cells_y, platform_excluded)
            
            trial_phase = "random"
            
    elif in_withdrawal_period:
        if not (poke_left or poke_right):  # Mouse has withdrawn
            if current_time - withdrawal_start_time &gt;= withdrawal_duration:
                in_withdrawal_period = False
                in_iti = True
                iti_start_time = current_time
                iti_duration = random.uniform(iti_duration_min, iti_duration_max)
        else:  # Mouse is still poking, reset withdrawal timer
            withdrawal_start_time = current_time
            
    elif reward_state:
        if reward_left and current_time - reward_left_start_time &gt;= reward_duration_left:
            reward_left = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif reward_right and current_time - reward_right_start_time &gt;= reward_duration_right:
            reward_right = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            reward_state = False
        elif poke_left and not reward_left and not reward_right:
            reward_left = True
            reward_left_count += 1
            reward_left_start_time = current_time
        elif poke_right and not reward_right and not reward_left:
            reward_right = True
            reward_right_count += 1
            reward_right_start_time = current_time

    # Handle multi-click sequence
    # Each click cycle: click ON for click_duration, then OFF for click_gap, then next click
    if click_total &gt; 0:
        elapsed = current_time - click_start_time
        cycle_duration = click_duration + click_gap
        current_cycle = int(elapsed / cycle_duration)
        time_in_cycle = elapsed - (current_cycle * cycle_duration)
        
        if current_cycle &gt;= click_total:
            # All clicks delivered
            click = False
            click_count = 0
            click_total = 0
        else:
            # Within a click cycle: ON during first click_duration, OFF during gap
            click_count = current_cycle + 1
            if time_in_cycle &lt; click_duration:
                click = True   # Pulse is ON
            else:
                click = False  # In the gap between clicks

    # Update previous poke states and set drinking state
    prev_poke_left, prev_poke_right = poke_left, poke_right
    drinking = poke_left or poke_right

    # Return values
    return (canvas, Point(centroid_x, centroid_y), reward_state, reward_left, reward_right, 
            poke_left, poke_right, drinking, in_iti, click, active_target, 
            trial_count, reward_left_count, reward_right_count, punishment_count, 
            trial_phase, flip_state)</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Trial Phase</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  return value[-2]</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Trial Phase</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Flip State</ipy:Name>
        <ipy:Script>@returns(int)
def process(value):
  return int(value[-1])</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Flip State</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Grid Visualization</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  return value[0]

</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Trial Count</ipy:Name>
        <ipy:Script># Get trial count

@returns(int)
def process(value):
  return value[-6]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Left</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[5]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Poke Right</ipy:Name>
        <ipy:Script># Poke left status
@returns(bool)
def process(value):
  return value[6]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Mouse Centroid</ipy:Name>
        <ipy:Script>clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(Point)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Active Target</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  return str(value[10])</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEventsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\dry-morris-maze-multisensory\3001\s12\060126_3001_s12_eventsA.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Item1,Item2,Item3,Item4,Item5,Item6</io:Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Active Target</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ITI</ipy:Name>
        <ipy:Script># ITI status

@returns(bool)
def process(value):
  return value[8]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>ITI</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward State</ipy:Name>
        <ipy:Script># Get reward state

@returns(bool)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Reward State</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Left</ipy:Name>
        <ipy:Script># Get reward_left state

@returns(bool)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Right</ipy:Name>
        <ipy:Script># Get reward_right state and reward state

@returns(bool)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Click</ipy:Name>
        <ipy:Script># Get click state (click is always last item in return statement)

@returns(bool)
def process(value):
  return value[9]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino Mega 2560</ard:PortName>
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Left Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-5]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward Right Count</ipy:Name>
        <ipy:Script># Get reward left count

@returns(int)
def process(value):
  return value[-4]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Punishment Count</ipy:Name>
        <ipy:Script># Get incorrect count

@returns(int)
def process(value):
  return value[-3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Combine Trial Counts</ipy:Name>
        <ipy:Description />
        <ipy:Script>@returns(str)
def process(value):
  reward_l = str(value.Item1)
  reward_r = str(value.Item2)
  incorrect = str(value.Item3 - value.Item1 - value.Item2)
  total = str(value.Item1 + value.Item2)
  trial_info = "Left: " + reward_l + " Right: " + reward_r + " Total: " + total + " Incorrect: " + incorrect
  return trial_info</ipy:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCountsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>D:\clickbait-place\data\dry-morris-maze-multisensory\3001\s12\060126_3001_s12_trialcounts.txt</io:Path>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Trial Phase</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Flip State</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialRewardsFilename</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\clickbait-place\data\dry-morris-maze-multisensory\3001\s12\060126_3001_s12_eventsB.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Air Flip</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Flip State</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ITI</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Reward State</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Phase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(tuple)
def process(value):
    flip_state = value.Item1
    trial_phase = value.Item2[3]

    left_air = False
    right_air = False
    fans = 0

    if trial_phase is 'platform':

        if flip_state == 2:
            left_air = False
            right_air = True
            fans = 0
        elif flip_state == 3:
            left_air = True
            right_air = False
            fans = 0
        elif flip_state == 4:
            # Upper compound (between UR and UL): inherits UL's air (left)
            left_air = True
            right_air = False
            fans = 0
        elif flip_state == 5:
            # Lower compound (between LR and LL): inherits LR's air (right)
            left_air = False
            right_air = True
            fans = 0

    else:
        left_air = False
        right_air = False
        fans = 128

    return (left_air, right_air, fans)
</ipy:Script>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Left Air</ipy:Name>
              <ipy:Script>@returns(bool)
def process(value):
  return value[0]</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>48</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Right Air</ipy:Name>
              <ipy:Script>@returns(bool)
def process(value):
  return value[1]</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>49</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Overhead Fans</ipy:Name>
              <ipy:Script>@returns(int)
def process(value):
  return int(value[2])</ipy:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:AnalogOutput">
                <ard:PortName>Arduino Mega 2560</ard:PortName>
                <ard:Pin>3</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="3" To="5" Label="Source3" />
            <Edge From="4" To="5" Label="Source4" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Monitor Flip</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3840</gl:Width>
                <gl:Height>1280</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>3840</gl:X>
                  <gl:Y>0</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>30</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                    <gl:Name>circle</gl:Name>
                    <gl:Width>1280</gl:Width>
                    <gl:Height>1920</gl:Height>
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>stimuli\black_circle.mp4</gl:FileName>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                    <gl:FrameCount xsi:nil="true" />
                    <gl:StartPosition>0</gl:StartPosition>
                    <gl:BufferLength xsi:nil="true" />
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:VideoTexture">
                    <gl:Name>noise</gl:Name>
                    <gl:Width>1280</gl:Width>
                    <gl:Height>1920</gl:Height>
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>stimuli\alternating-line.mp4</gl:FileName>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                    <gl:FrameCount xsi:nil="true" />
                    <gl:StartPosition>0</gl:StartPosition>
                    <gl:BufferLength xsi:nil="true" />
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Flip State</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ITI</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Reward State</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Active Target</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial Phase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Circle Cue</ipy:Name>
              <ipy:Script>@returns(float)
def process(value):
    flip_state = value.Item1
    session_num = value.Item2[0]
    iti_bool = value.Item2[1]
    reward_state = value.Item2[2]
    active_target = value.Item2[3]
    trial_phase = str(value.Item2[4])


    if trial_phase == "platform" and not reward_state:
      # Compound states fire the visual cue during platform phase regardless of active_target.
      if flip_state == 4 and iti_bool == False:
          # Upper compound (between UR and UL): inherits UR's visual position
          return float(-1.5)
      elif flip_state == 5 and iti_bool == False:
          # Lower compound (between LR and LL): inherits LL's visual position
          return float(1.5)
      elif active_target is None:
          return float(1000)
      elif flip_state == 1 and iti_bool == False:
          return float(1.5)
          #return float(1000)
      elif flip_state == 0 and iti_bool == False:
          return float(-1.5)
          #return float(1000)
      else:
          return float(1000)
    else:
          return float(1000)

</ipy:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
              <TextureName>circle</TextureName>
              <PlaybackRate>0</PlaybackRate>
              <Loop>true</Loop>
              <Angle>0</Angle>
              <ExtentX>2.96</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>1000</LocationX>
              <LocationY>0</LocationY>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
              <Layer>0</Layer>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>Grating Cue</ipy:Name>
              <ipy:Script>@returns(float)
def process(value):
    flip_state = value.Item1
    session_num = value.Item2[0]
    iti_bool = value.Item2[1]
    reward_state = value.Item2[2]
    active_target = value.Item2[3]
    trial_phase = str(value.Item2[4])


    if trial_phase == "interim" and not iti_bool:
          return float(1.5)
          #return float(1000)
    else:
          return float(1000)</ipy:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
              <TextureName>noise</TextureName>
              <PlaybackRate>0</PlaybackRate>
              <Loop>true</Loop>
              <Angle>0</Angle>
              <ExtentX>8</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>1000</LocationX>
              <LocationY>0</LocationY>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
              <Layer>0</Layer>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="18" Label="Source1" />
            <Edge From="8" To="15" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="14" Label="Source2" />
            <Edge From="11" To="14" Label="Source3" />
            <Edge From="12" To="14" Label="Source4" />
            <Edge From="13" To="14" Label="Source5" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="20" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filename Definitions</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Name>Get Start Timestamp</ipy:Name>
              <ipy:Script>from System import DateTime

# Get timestamp from beginning of session

@returns(DateTime)
def generate():
  yield DateTime.Now
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionStart</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Date</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Session Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>File naming info</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File naming info</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>SessionData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AVI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_video_timestamp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>VideoTimestamp</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_rhd2000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Rhd2000Filename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_daq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BIN</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DAQData</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_occupancy</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>JPG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>HistogramFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_trialcounts</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TXT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialCountsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsA</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialEventsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_eventsB</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CSV</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Format" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetFullPath" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TrialRewardsFilename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.jpg</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>JPG</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>CSV</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>AVI</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.txt</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>TXT</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>BIN</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source4" />
            <Edge From="6" To="7" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="34" Label="Source2" />
            <Edge From="33" To="34" Label="Source3" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="42" Label="Source1" />
            <Edge From="40" To="42" Label="Source2" />
            <Edge From="41" To="42" Label="Source3" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="55" To="58" Label="Source1" />
            <Edge From="56" To="58" Label="Source2" />
            <Edge From="57" To="58" Label="Source3" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="63" To="66" Label="Source1" />
            <Edge From="64" To="66" Label="Source2" />
            <Edge From="65" To="66" Label="Source3" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="67" To="68" Label="Source1" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="71" To="74" Label="Source1" />
            <Edge From="72" To="74" Label="Source2" />
            <Edge From="73" To="74" Label="Source3" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source1" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="78" Label="Source1" />
            <Edge From="79" To="80" Label="Source1" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="87" To="88" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Date" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>060126</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Date</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Duration (Minutes)" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>45</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>SessionDuration</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="MouseID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>3001</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>MouseID</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Session Num." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s12</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Session Number</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Experiment Name" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>dry-morris-maze-multisensory</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ExpName</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Data Directory" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>D:/clickbait-place/data/</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExpName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseID</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Session Number</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Path</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="24" Label="Source1" />
      <Edge From="10" To="33" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="15" To="22" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="31" To="34" Label="Source1" />
      <Edge From="32" To="34" Label="Source2" />
      <Edge From="33" To="34" Label="Source3" />
      <Edge From="34" To="42" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="41" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="43" To="46" Label="Source1" />
      <Edge From="43" To="48" Label="Source1" />
      <Edge From="43" To="49" Label="Source1" />
      <Edge From="43" To="50" Label="Source1" />
      <Edge From="43" To="52" Label="Source1" />
      <Edge From="43" To="53" Label="Source1" />
      <Edge From="43" To="54" Label="Source1" />
      <Edge From="43" To="55" Label="Source1" />
      <Edge From="43" To="61" Label="Source1" />
      <Edge From="43" To="64" Label="Source1" />
      <Edge From="43" To="67" Label="Source1" />
      <Edge From="43" To="69" Label="Source1" />
      <Edge From="43" To="71" Label="Source1" />
      <Edge From="43" To="73" Label="Source1" />
      <Edge From="43" To="74" Label="Source1" />
      <Edge From="43" To="75" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="49" To="56" Label="Source1" />
      <Edge From="49" To="76" Label="Source3" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="56" Label="Source2" />
      <Edge From="52" To="56" Label="Source3" />
      <Edge From="53" To="56" Label="Source4" />
      <Edge From="54" To="56" Label="Source5" />
      <Edge From="55" To="56" Label="Source6" />
      <Edge From="55" To="60" Label="Source1" />
      <Edge From="56" To="59" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="61" To="63" Label="Source1" />
      <Edge From="61" To="83" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="64" To="66" Label="Source1" />
      <Edge From="64" To="83" Label="Source2" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="67" To="83" Label="Source3" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="69" To="83" Label="Source4" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="71" To="83" Label="Source5" />
      <Edge From="73" To="76" Label="Source1" />
      <Edge From="74" To="76" Label="Source2" />
      <Edge From="75" To="76" Label="Source4" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="77" To="80" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="79" To="80" Label="Source2" />
      <Edge From="81" To="83" Label="Source6" />
      <Edge From="82" To="83" Label="Source7" />
      <Edge From="83" To="86" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="86" Label="Source2" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="92" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="97" To="98" Label="Source1" />
      <Edge From="99" To="100" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="103" To="104" Label="Source1" />
      <Edge From="105" To="106" Label="Source1" />
      <Edge From="106" To="114" Label="Source1" />
      <Edge From="107" To="114" Label="Source2" />
      <Edge From="108" To="114" Label="Source3" />
      <Edge From="109" To="114" Label="Source4" />
      <Edge From="110" To="114" Label="Source5" />
      <Edge From="111" To="114" Label="Source6" />
      <Edge From="112" To="114" Label="Source7" />
      <Edge From="113" To="114" Label="Source8" />
      <Edge From="114" To="115" Label="Source1" />
      <Edge From="115" To="116" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>