<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino</ard:Name>
          <ard:PortName>COM4</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>10</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:Pin>9</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan">
          <Operand xsi:type="IntProperty">
            <Value>1000</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>7</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>8</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:Pin>9</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan">
          <Operand xsi:type="IntProperty">
            <Value>1000</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino</ard:PortName>
          <ard:Pin>9</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino</ard:PortName>
          <ard:Pin>10</ard:Pin>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>